PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = black
  expName = PVT_NIBS
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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  Routine Instructions
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    TextComponent InstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the PVT Task!


        In this task, you are to press the SPACEBAR as quick as possible after a red counter appears
        on screen.


        Start the task by pressing the SPACEBAR.
    KeyboardComponent InstrucKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
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    CodeComponent ISIcode
      Code Type = Py
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      Begin Experiment:
        # All the durations are in seconds
        minISI = 2
        maxISI = 10

        # Task duration (set to 10 minutes = 600 seconds)
        length_of_task = 600

        # Feedback duration
        feed = 0.5

        # A timer
        timing = core.Clock()

        # Loading the beep sound
        warning_beep = sound.Sound('beep.wav')

        # Get the subject ID dynamically from the experiment info
        subject_id = expInfo['participant']

        # Create the output folder if it doesn't exist
        output_folder = 'pvt_txt_data'
        os.makedirs(output_folder, exist_ok=True)

        # Extract the subject ID and format the output file name
        subject_id = expInfo['participant']
        output_filename = f"sub-{subject_id}_PVT_data.txt"
        output_path = os.path.join(output_folder, output_filename)

        # Extract the date and time from the 'date' key
        date_str = expInfo["date"].split("_")[0]  # e.g., '2024-12-19'
        time_str = expInfo["date"].split("_")[1].replace("h", "")[:4]  # e.g., '1601'

        # Create and write the header to the file
        with open(output_path, 'w') as file:
            file.write(f"PVT-{subject_id} SINGLE TRIAL DATA FILE\n")
            file.write(f'"STUDY:","PVT_NIBS","E. INITIALS:","XYZ","S. INITIALS:","XYZ"\n')
            file.write(f'"S. ID NUMBER:","{subject_id}","TRIAL NUMBER:","12"\n')
            file.write(f'"TRIAL DATE:","{date_str}","TRIAL TIME:","{time_str}"\n')
            file.write(f'"SLEEPY PRE, POST TRIAL:","0","0"\n')
            file.write(f'"ISI MIN (ms):","2000","ISI MAX (ms):","10000"\n')
            file.write(f'"TRIAL LENGTH (s):","600","TASK:","V"\n')
            file.write(f'"HAND:","R","PVT S/N:","2529"\n')
            file.write(f'"DATA IS RT(ms) & ET(sec):"\n')
      Begin Routine:
        # Generate a random ISI within the range using a rectangular distribution
        randISI = random() * (maxISI - minISI) + minISI

        # If it is the first trial
        if PVT_Trials.thisN == 0:
            overall_timer = core.Clock()
            realISI = 0

        # For subsequent trials, include feedback duration in ISI
        if PVT_Trials.thisN > 0:
            realISI = feed

        # A message when the participant misses
        message = 'You did not hit the button!'

        # Adding the ISI so it is saved in the datafile
        thisExp.addData('ISI', randISI)
      Each Frame:
        keys = dontrespond.getKeys(keyList=['space'], waitRelease=False)
        keys = [key.name for key in keys]

        # If a key is pressed during the ISI, mark it as a "False Start!"
        if "space" in keys:
            message = "False Start!"
            continueRoutine = False
    TextComponent ISI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI-realISI
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    KeyboardComponent dontrespond
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI-1
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  Routine Target
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    CodeComponent Target_code
      Code Type = Py
      Begin Routine:
        # Reset the timer at the start of the target routine
        timing.reset()

        # Check if the message is "False Start!" from the ISI routine
        if message == 'False Start!':
            # Record 0 for accuracy and NaN for RT
            thisExp.addData('Accuracy', 0)
            thisExp.addData('RTms', np.NAN)
            # End the routine early
            continueRoutine = False
      Each Frame:
        # Counter in milliseconds to display on the Targetstim text component
        time = int(round(timing.getTime(), 3) * 1000)
      End Routine:
        # If a valid response (spacebar press) is recorded
        if type(Response.rt) is float:
            # Check if the response time is less than 150ms
            if Response.rt * 1000 < 150:
                message = "False Start!"
                thisExp.addData('Accuracy', 0)
                thisExp.addData('RTms', Response.rt * 1000)
            else:
                message = str(round(Response.rt * 1000))
                thisExp.addData('Accuracy', 1)
                thisExp.addData('RTms', Response.rt * 1000)

        # If no response within 30 seconds
        if timing.getTime() >= 29.99:
            message = 'No response!'
            warning_beep.play()
            Response.rt = timing.getTime()
            thisExp.addData('RTms', np.NAN)
            thisExp.addData('Accuracy', 0)
            continueRoutine = False

        # Calculate RT and ET for the current trial
        if isinstance(Response.rt, (list, type(None))) or Response.rt == []:
            rt = 'FS'
        else:
            rt = int(Response.rt * 1000)

        et = Target.tStart  # Use the start time of the Target as ET

        # Append the data to the file
        with open(output_path, 'a') as file:
            file.write(f"{rt}\t{et:.2f}\n")
    TextComponent Targetstim
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $time
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    KeyboardComponent Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine Feedback
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    TextComponent Feedback_text
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feed
      text [set every repeat] = $message
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  Routine End_task
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    CodeComponent End_task_2
      Code Type = Py
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      End Routine:
        # Get the total time elapsed in the task
        time_in_task = overall_timer.getTime()

        # If the total task duration exceeds the specified length, end the task
        if time_in_task >= length_of_task:
            continueRoutine = False
            PVT_Trials.finished = True
  Routine The_end
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    TextComponent Goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks you for your participation!

        Press the SPACE key to end the task
    KeyboardComponent GoodbyeEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator PVT_Trials loopType="TrialHandler"
    loopType = random
    nReps = 120
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    Routine ISI
    Routine Target
    Routine Feedback
    Routine End_task
  LoopTerminator PVT_Trials
  Routine The_end
